PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Project
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine exp
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        number_1=0
        number_2=0

        while(number_1==number_2):
            number_1 = randint(1,9)
            number_2 = randint(1,9)
        if number_1 > number_2:
            corr = 'left'
        else:
            corr = 'right'
        numbers = []

        if random()>0.5:
            num_1_size = 0.4
            num_2_size = 0.1
        else:
            num_2_size = 0.4
            num_1_size = 0.1
        num_1 = visual.TextStim(win=win, name='num_stim',
            text=number_1,
            font='Open Sans',
            pos=(-0.6, 0), height=num_1_size, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        num_2 = visual.TextStim(win=win, name='num_stim',
            text=number_2,
            font='Open Sans',
            pos=(0.6, 0), height=num_2_size, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        numbers.append(num_1)
        numbers.append(num_2)

        for num in numbers:
            num.setAutoDraw(True)
      End Routine:
        for num in numbers:
            num.setAutoDraw(False)
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine exp_2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        number_1 = 0
        number_2 = 0
        numbers = []
        colors = ['black', 'red', 'green', 'yellow']
        while(number_1==number_2):
            number_1 = randint(1,9)
            number_2 = randint(1,9)
        if number_1 > number_2:
            color_1 = colors[randint(len(colors))]
            color_2 = 'white'
            corr = 'left'
        else:
            color_1 = 'white'
            color_2 = colors[randint(len(colors))]
            corr = 'right'

        if random()>0.5:
            num_1_size = 0.4
            num_2_size = 0.1
        else:
            num_2_size = 0.4
            num_1_size = 0.1
        num_1 = visual.TextStim(win=win, name='num_stim',
            text=number_1,
            font='Open Sans',
            pos=(-0.6, 0), height=num_1_size, wrapWidth=None, ori=0,
            color=color_1, colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        num_2 = visual.TextStim(win=win, name='num_stim',
            text=number_2,
            font='Open Sans',
            pos=(0.6, 0), height=num_2_size, wrapWidth=None, ori=0,
            color=color_2, colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        numbers.append(num_1)
        numbers.append(num_2)

        for num in numbers:
            num.setAutoDraw(True)
      End Routine:
        for num in numbers:
            num.setAutoDraw(False)
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine exp_3
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        number_1 = 0
        number_2 = 0
        while(number_1==number_2):
            number_1 = randint(1,9)
            number_2 = randint(1,9)
        numbers = []

        if number_1 > number_2:
            color_1 = 'white'
            color_2 = 'white'
            pos = (-0.6, 0.2)
            corr = 'left'
        else:
            color_1 = 'white'
            color_2 = 'white'
            pos = (0.6, 0.2)
            corr = 'left'

        if random()>0.5:
            num_1_size = 0.4
            num_2_size = 0.1
        else:
            num_2_size = 0.4
            num_1_size = 0.1
        num_1 = visual.TextStim(win=win, name='num_stim',
            text=number_1,
            font='Open Sans',
            pos=(-0.6, 0), height=num_1_size, wrapWidth=None, ori=0,
            color=color_1, colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        num_2 = visual.TextStim(win=win, name='num_stim',
            text=number_2,
            font='Open Sans',
            pos=(0.6, 0), height=num_2_size, wrapWidth=None, ori=0,
            color=color_2, colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);
        tri = visual.ShapeStim(win=win, pos=pos, size=(0.03, 0.03), fillColor=[1, 1, 1], lineColor=[-1, -1, -1], vertices='rectangle')
        numbers.append(num_1)
        numbers.append(num_2)
        numbers.append(tri)
        for num in numbers:
            num.setAutoDraw(True)
      End Routine:
        for num in numbers:
            num.setAutoDraw(False)
    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the beginning, a fixation(plus sign) will appear before the trials start.

        The first trial will be about locating the numerically larger number on the screen.

        In the second trial, a colour based cue will be provided for the same task.

        In the third trial, a location based cue will be provided.

        *Click to start*
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine exp
  LoopTerminator trials
  Routine trial
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine exp_2
  LoopTerminator trials_2
  Routine trial
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine exp_3
  LoopTerminator trials_4
